PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 99):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = fingertaps
  keyboardBackend = PsychToolbox
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Routines
  Routine movie
    MovieComponent taps
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set during: instructions.preload_period] = $condition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blockLength
      units = pix
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  Routine rest
    TextComponent crosshair
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = blockLength
      text = +
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  Routine dialogue
    CodeComponent dialogue1
      Code Type = Py
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      Before Experiment:
        import time

        #defaults
        blockLength = 20
        numBlocks = 5
        nullPeriod = 0
        condition = 'left'

        params = {
                'blockLength': blockLength,
                'numBlocks': numBlocks,
                'nullPeriod': nullPeriod,
                'condition':['left', 'right', 'left_no_touch', 'right_no_touch']
                }

        tip = {
                'blockLength': 'length of on/off cycle',
                'numBlocks': 'number of blocks to run',
                'nullPeriod': 'initial rest period after trigger recieve',
                'condition': 'left / right hand finger taps or left / right taps without touch'
                }

        params['timeStr']= time.strftime("%Y_%b_%d_%H%M", time.localtime())

        # create dialogue box and save changed parameters
        dlg = gui.DlgFromDict(
            dictionary=params,
            title="Finger Tapping",
            fixed=['timeStr'],
            sortKeys=True,
            tip=tip)

        if dlg.OK:
            print(params) # print to screen but also save file
            f = open(params['timeStr']+"_params"+".txt","w")
            f.write( str(params) )
            f.close()
  Routine instructions
    CodeComponent dlg_values
      Code Type = Auto->JS
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      Before Experiment:
        blockLength = dlg.dictionary['blockLength']
        numBlocks = dlg.dictionary['numBlocks']
        nullPeriod = float(dlg.dictionary['nullPeriod'])
        condition = dlg.dictionary['condition']

        if condition == 'left':
            condition = 'movies/lefttaps.avi'
        elif condition == 'right':
            condition = 'movies/righttaps.avi'
        elif condition == 'left_no_touch':
            condition = 'movies/lefttaps_almost.avi'
        else:
            condition = 'movies/righttaps_almost.avi'

        print("")
        print("condition is: ")
        print(condition)
        print("")
    TextComponent tapping_instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Please relax your hands so they remain in the same positions regardless of movement.

        Tap your fingers as shown in the video and at the same pace.
    KeyboardComponent key_resp
      allowedKeys = 't','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    StaticComponent preload_period
      saveStartStop = False
      stopVal [duration (s)] = 1
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  Routine thanks
    TextComponent goodbye
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        That's it!

        Thanks!
  Routine null
    TextComponent nullCrosshair
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = nullPeriod
      text = +
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Flow
  Routine dialogue
  Routine instructions
  Routine null
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine movie
    Routine rest
  LoopTerminator blocks
  Routine thanks
