PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 99):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = fingertaps
  keyboardBackend = PsychToolbox
  logging level = error
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Routines
  Routine movie
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    MovieComponent taps
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set during: instructions.preload_period] = $condition
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blockLength
      units = pix
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '1'
      correctAns = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $blockLength
      store = all keys
      storeCorrect = True
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    CodeComponent nestedlist
      Code Type = Py
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      Before Experiment:
        nestedlist = []
      Begin Routine:
        win.mouseVisible = False
      End Routine:
        win.mouseVisible = False
  Routine rest
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    TextComponent crosshair
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = blockLength
      text = +
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    KeyboardComponent key_resp_rest
      allowedKeys [set every repeat] = '1'
      correctAns = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $blockLength
      store = all keys
      storeCorrect = True
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    CodeComponent nestedrestlist
      Code Type = Py
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      Before Experiment:
        nestedrestlist = []
    CodeComponent appendResponses
      Code Type = Py
      Begin Routine:
        if not key_resp.keys:
            nestedlist.append([])
        else:
            nestedlist.append(key_resp.keys)
      End Routine:
        if not key_resp_rest.keys:
            nestedrestlist.append([])
        else:
            nestedrestlist.append(key_resp_rest.keys)
  Routine dialogue
    RoutineSettingsComponent dialogue
      saveStartStop = False
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    CodeComponent dialogue1
      Code Type = Py
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      Before Experiment:
        import time

        #defaults
        blockLength = 20
        numBlocks = 5
        nullPeriod = 0
        condition = 'left'

        params = {
                'blockLength': blockLength,
                'numBlocks': numBlocks,
                'nullPeriod': nullPeriod,
                'condition':['left', 'right', 'left_no_touch', 'right_no_touch']
                }

        tip = {
                'blockLength': 'length of on/off cycle',
                'numBlocks': 'number of blocks to run',
                'nullPeriod': 'initial rest period after trigger recieve',
                'condition': 'left / right hand finger taps or left / right taps without touch'
                }

        params['timeStr']= time.strftime("%Y_%b_%d_%H%M", time.localtime())

        # create dialogue box and save changed parameters
        dlg = gui.DlgFromDict(
            dictionary=params,
            title="Finger Tapping",
            fixed=['timeStr'],
            sortKeys=True,
            tip=tip)

        print(""); print(""); print(params); print("") # print to screen
      Begin Experiment:
        thisExp.addData('exp parameters', params)
  Routine instructions
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    CodeComponent dlg_values
      Code Type = Py
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      Before Experiment:
        blockLength = dlg.dictionary['blockLength']
        numBlocks = dlg.dictionary['numBlocks']
        nullPeriod = float(dlg.dictionary['nullPeriod'])
        condition = dlg.dictionary['condition']

        if condition == 'left':
            condition = 'movies/lefttaps.avi'
        elif condition == 'right':
            condition = 'movies/righttaps.avi'
        elif condition == 'left_no_touch':
            condition = 'movies/lefttaps_almost.avi'
        else:
            condition = 'movies/righttaps_almost.avi'

        print("condition was: " + condition); print("")
    TextComponent tapping_instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Please press the button box with your index finger whenever the fingers in the video touch.
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    KeyboardComponent scan_trigger
      allowedKeys = 't','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    StaticComponent preload_period
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine thanks
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    TextComponent goodbye
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        That's it!

        Thanks!
    CodeComponent feedback_to_experimenter
      Code Type = Py
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      End Experiment:
        print("number of taps per block:")
        for index, item in enumerate(nestedlist):
            print("block "+ str(index+1), ": " + str(len(item)))

        print("")

        print("number of taps per REST block:")
        for index, item in enumerate(nestedrestlist):
            print("block "+ str(index+1), ": " + str(len(item)))

        print("")
  Routine null
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    TextComponent nullCrosshair
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = nullPeriod
      text = +
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Flow
  Routine dialogue
  Routine instructions
  Routine null
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = numBlocks
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    Routine movie
    Routine rest
  LoopTerminator blocks
  Routine thanks
